PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1440, 900]
  expName = GroupB_final
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        triangle = "stimulus/triangle.png"
        square = "stimulus/square.png"
        noTrialArousal = "distractor abscent"
      Begin Experiment:
        label_text = ""
        shape_path= ""
      Begin JS Experiment:
        label_text = "";
        orientation = 0;
        correct = 0;
        value = Math.random();
        if ((value < (1 / 4))) {
            label_text = "self";
            orientation = 0;
            c_resp = "y";
        } else {
            if ((((1 / 4) < value) && (value < (2 / 4)))) {
                label_text = "self";
                orientation = 45;
                c_resp = "n";
            } else {
                if ((((2 / 4) < value) && (value < (3 / 4)))) {
                    label_text = "other";
                    orientation = 0;
                    c_resp = "n";
                } else {
                    if ((((3 / 4) < value) && (value < (4 / 4)))) {
                        label_text = "other";
                        orientation = 45;
                        c_resp = "y";
                    } else {
                        console.log("we just broke math");
                    }
                }
            }
        }
      Begin Routine:
        value = random()
        thisExp.addData("Arousal", "distractor absent")

        if value <= 1/4:
            label_text = "You"
            shape_path = triangle
            thisExp.addData("shape", "triangle")
            thisExp.addData("pair", "match")
            thisExp.addData("Label", "You")
            c_resp = 'm'
        elif 1/4 < value <= 2/4:
            label_text = "You"
            shape_path = square
            thisExp.addData("shape", "square")
            thisExp.addData("pair", "unmatch")
            thisExp.addData("Label", "You")
            c_resp = 'z'
        elif 2/4 < value <= 3/4:
            label_text = "Stranger"
            shape_path = triangle
            thisExp.addData("shape", "triangle")
            thisExp.addData("pair", "unmatch")
            thisExp.addData("Label", "Stranger")
            c_resp = 'z'
        elif 3/4 < value <= 4/4:
            label_text = "Stranger"
            shape_path = square
            thisExp.addData("shape", "square")
            thisExp.addData("pair", "match")
            thisExp.addData("Label", "Stranger")
            c_resp = 'm'
        else:
            print("we just broke math")
    PolygonComponent fixation
      fillColor = white
      lineWidth = 0.8
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    TextComponent label
      letterHeight = letter_height
      pos = (0, -150)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $label_text
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'z','m'
      correctAns = $c_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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    ImageComponent shape_1
      image [set every repeat] = $shape_path
      pos = (0, top_position)
      saveStartStop = False
      size = (width, height)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    CodeComponent load_variables
      Code Type = Py
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      Before Experiment:
        # variables for positioning throughout the expeirment
        import numpy as np
        import base64

        height = 150
        width = 150
        left_position = -400
        right_position = 400
        bottom_position = -150
        top_position = 200
        below_position = -240
        letter_height = 36
        triangle_width = 150
        triangle_height = 170
        distractor_y = -50
      End Experiment:
        def obfuscate_file(file_path):
            if file_path.endswith('.obfuscated'):
                print(f"File {file_path} is already obfuscated. Skipping.")
                return

            with open(file_path, 'rb') as file:
                content = file.read()

            obfuscated_content = base64.b64encode(content)

            obfuscated_file_path = file_path + '.obfuscated'
            with open(obfuscated_file_path, 'wb') as file:
                file.write(obfuscated_content)

            os.remove(file_path)
            print(f"File {file_path} has been obfuscated.")

        def obfuscate_data_folder(folder_path):
            for root, _, files in os.walk(folder_path):
                for file in files:
                    if file.endswith('.csv'):
                        file_path = os.path.join(root, file)
                        obfuscate_file(file_path)

        # Usage
        data_folder = 'data'
        obfuscate_data_folder(data_folder)
    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment.

        press 'spacebar' to continue.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine self_other_instruction
    RoutineSettingsComponent self_other_instruction
      saveStartStop = False
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this study, you will be shown two shapes (triangle and square) with two labels (you and stranger). You have to memorize this association.

        - You are represented by a Triangle (You-Triangle)
        - There is a Stranger (an unknown person to you), who is represented by square (Stranger-square)

        Take a few minutes to memorize this association. Let me know when you have memorized and ready to proceed to the experiment.

        press 'spacebar' to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine self_other_info
    RoutineSettingsComponent self_other_info
      saveStartStop = False
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    CodeComponent info_shape_code
      Code Type = Auto->JS
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      Begin Experiment:
        triangle_path = "stimulus/triangle.png"
        square_path = "stimulus/square.png"

        # you = triangle, stranger = square
    CodeComponent code_7
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        you_vertices = 3
        other_vertices = 4
      Begin Routine:
        you_vertices = 3
        other_vertices = 4
    PolygonComponent self_shape
      disabled = True
      fillColor = white
      nVertices = you_vertices
      pos = (-0.2, -0.025)
      saveStartStop = False
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent other
      disabled = True
      fillColor = white
      nVertices = other_vertices
      ori = 45
      pos = (0.2, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent label_self
      letterHeight = letter_height
      pos = (left_position, bottom_position)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
      units = pix
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    TextComponent label_other
      letterHeight = letter_height
      pos = (right_position, bottom_position)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Stranger
      units = pix
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    TextComponent text
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press 'spacebar' to contiue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    ImageComponent square_image
      image = $square_path
      pos = (right_position, 0)
      saveStartStop = False
      size = (width, height)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent triangle_path
      image = $triangle_path
      pos = (left_position, 0)
      saveStartStop = False
      size = (triangle_width, triangle_height)
      startVal [time (s)] = 0.0
      units = pix
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  Routine self_other_starting
    RoutineSettingsComponent self_other_starting
      saveStartStop = False
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    TextComponent text_norm_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Your task is to judge whether the shape label pairing is correct or incorrect. If the shape label pairing is correct press the button labeled "correct and if its incorrect press the button labelled "incorrect" on the keyboard.

        press 'spacebar' to continue
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text = "miss"
      Begin Routine:
        #if key_resp_2.corr == 1:
        #    feedback_text = "correct"
        #else:
        #    feedback_text = "incorrect"

        # main logic for feedback
        if(key_resp_2.keys == "m"):
            if (c_resp == "m"):
                feedback_text = "correct"
            else:
                feedback_text = "incorrect"
        elif (key_resp_2.keys == "z"):
            if(c_resp == "z"):
                feedback_text = "correct"
            else:
                feedback_text = "incorrect"
        else:
            feedback_text = "miss"
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_text
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  Routine free_viewing
    RoutineSettingsComponent free_viewing
      saveStartStop = False
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    ImageComponent image
      image [set every repeat] = $free_view_image
      saveStartStop = False
      size = (400, 300)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
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      Before Experiment:
        from numpy.random import choice
  Routine block_1
    RoutineSettingsComponent block_1
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        block1_shape_path = ""
        label_block_one = ""
        correct_resp_blockOne = ""
      Begin Routine:
        random_value = random()
        distractor_position = np.random.choice([left_position, right_position], p=[0.5,0.5])
        thisExp.addData('distractor_position', distractor_position)
        thisExp.addData('distractor_pos_label', 'left' if distractor_position == -400 else 'right')

        if random_value <= 1/4:
            block1_shape_path = triangle
            label_block_one = "You"
            correct_resp_blockOne = "m"
            thisExp.addData("pair", "match")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "You")
        elif 1/4 < random_value <= 2/4:
            block1_shape_path = triangle
            label_block_one = "Stranger"
            correct_resp_blockOne = "z"
            thisExp.addData("pair", "unmatch")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "Stranger")
        elif 2/4 < random_value <= 3/4:
            block1_shape_path = square
            label_block_one = "You"
            correct_resp_blockOne = "z"
            thisExp.addData("pair", "unmatch")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "You")
        elif 3/4 < random_value <= 4/4:
            block1_shape_path = square
            label_block_one = "Stranger"
            correct_resp_blockOne = "m"
            thisExp.addData("pair", "match")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "Stranger")
        else:
            print("block one conditions broke math...")
    PolygonComponent block1_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent distractor_block1
      image [set every repeat] = $distractor
      pos [set every repeat] = (distractor_position, distractor_y)
      saveStartStop = False
      size = (400, 300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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    TextComponent blockone_label
      letterHeight = letter_height
      pos = (0, below_position)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $label_block_one
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'z','m'
      correctAns = $correct_resp_blockOne
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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    ImageComponent block1_shape
      image [set every repeat] = $block1_shape_path
      pos = (0, top_position)
      saveStartStop = False
      size = (width, height)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine block_2
    RoutineSettingsComponent block_2
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        orientation_block_two = ""
        label_block_two = ""
        correct_resp_blockTwo = ""
        x_position = 0.0
      Begin Routine:
        random_value = random()
        random_value1 = random()
        thisExp.addData("distractor_location", "periphery")

        if random_value1 < 1/2:
            x_position = 0.4
        elif 1/2 < random_value1 < 2/2:
            x_position = -0.4
        else:
            x_position = 0.0

        if random_value < 1/4:
            orientation_block_two = 0
            label_block_two = "Self"
            correct_resp_blockTwo = "y"
            thisExp.addData("Orientation" , 0)
            thisExp.addData("Label", "Self")
        elif 1/2 < random_value < 2/4:
            orientation_block_two = 0
            label_block_two = "Other"
            correct_resp_blockTwo = "n"
            thisExp.addData("Orientation" , 0)
            thisExp.addData("Label", "Other")
        elif 2/4 < random_value < 3/4:
            orientation_block_two = 45
            label_block_two = "Self"
            correct_resp_blockTwo = "n"
            thisExp.addData("Orientation" , 45)
            thisExp.addData("Label", "Self")
        else:
            orientation_block_two = 45
            label_block_two = "Other"
            correct_resp_blockTwo = "y"
            thisExp.addData("Orientation" , 45)
            thisExp.addData("Label", "Other")
            thisExp.addData("random_value", random_value)
    PolygonComponent block2_fixation
      fillColor = white
      ori = 45
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent block2_polygon
      fillColor = white
      ori [set every repeat] = orientation_block_two
      pos = (0, 0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_block2
      image [set every repeat] = $distractor_blockTwo
      pos [set every repeat] = (x_position, -0.08)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    TextComponent blocktwo_label
      letterHeight = 0.05
      pos = (0, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $label_block_two
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      correctAns = $correct_resp_blockTwo
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine block2_start
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    TextComponent text_norm_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Block two is about to start

        Press the spacebar to continue
    KeyboardComponent key_instruct_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_5
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine free_view_instruction
    RoutineSettingsComponent free_view_instruction
      saveStartStop = False
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    TextComponent text_norm_6
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In the task ahead, fixation (+ sign) is replaced with images [emotional (such as erotic, angry, happy, disgust) and non-emotional images. You will be shown some example image before hand].

        You have to ignore these images and focus on the task of reporting whether the presented shape-label pairing is corrent or incorrect.

        Press spacebar to see the example images...
    KeyboardComponent key_instruct_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_6
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine thank_you
    RoutineSettingsComponent thank_you
      saveStartStop = False
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    TextComponent text_norm_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating :))
      units = norm
      wrapWidth = 1.8
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  Routine block1_feedback
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_blockOne = ""
      Begin Routine:
        #if key_resp_4.corr == 1:
        #    feedback_blockOne = "correct"
        #else:
        #    feedback_blockOne = "incorrect"

        if(key_resp_4.keys == "m"):
            if (correct_resp_blockOne == "m"):
                feedback_blockOne = "correct"
            else:
                feedback_blockOne = "incorrect"
        elif (key_resp_4.keys == "z"):
            if(correct_resp_blockOne == "z"):
                feedback_blockOne = "correct"
            else:
                feedback_blockOne = "incorrect"
        else:
            feedback_blockOne = "miss"
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $feedback_blockOne
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  Routine block2_feedback
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_blockTwo = ""
      Begin Routine:
        if key_resp_5.corr == 1:
            feedback_blockTwo = "correct"
        else:
            feedback_blockTwo = "incorrect"
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $feedback_blockTwo
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  Routine task_start
    RoutineSettingsComponent task_start
      saveStartStop = False
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    TextComponent text_norm_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        The task is about to start if the shape label pairing is correct press the button labeled "correct and if its incorrect press the button labelled "incorrect" on the keyboard.

        Shape and the label are presented for very short period of time. Ignore the emotional/nonemotional images and try to respond as fast as possible.

        press 'spacebar' to continue...
    KeyboardComponent key_instruct_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine countdown
    RoutineSettingsComponent countdown
      saveStartStop = False
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    TextComponent text_countdown
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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  Routine break_2
    RoutineSettingsComponent break_2
      saveStartStop = False
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text = Take a break for 2 minutes and come back to the expeirment.
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    KeyboardComponent key_resp_6
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 120.0
      store = nothing
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 120.0
      text = Press "S" when you are ready to resume.
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text [set every frame] = $str(120-int(t))
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  Routine block
    RoutineSettingsComponent block
      saveStartStop = False
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        block1_shape_path = ""
        label_block_one = ""
        correct_resp_blockOne = ""
      Begin Routine:
        random_value = random()

        if random_value <= 1/4:
            block1_shape_path = triangle
            label_block_one = "You"
            correct_resp_blockOne = "m"
            thisExp.addData("match", "true")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "You")
        elif 1/4 < random_value <= 2/4:
            block1_shape_path = triangle
            label_block_one = "Stranger"
            correct_resp_blockOne = "z"
            thisExp.addData("match", "false")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "Stranger")
        elif 2/4 < random_value <= 3/4:
            block1_shape_path = square
            label_block_one = "You"
            correct_resp_blockOne = "z"
            thisExp.addData("match", "false")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "You")
        elif 3/4 < random_value <= 4/4:
            block1_shape_path = square
            label_block_one = "Stranger"
            correct_resp_blockOne = "m"
            thisExp.addData("match", "true")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "Stranger")
        else:
            print("block one conditions broke math...")
    PolygonComponent block1_fixation_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent block1_ploygon_2
      disabled = True
      fillColor = white
      ori [set every repeat] = orientation_block_one
      pos = (0, 0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_block1_2
      image [set every repeat] = $distractors_blockOne
      pos = (0, -0.04)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    TextComponent blockone_label_2
      letterHeight = 0.05
      pos = (0, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $label_block_one
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    KeyboardComponent key_resp_7
      allowedKeys = 'z','m'
      correctAns = $correct_resp_blockOne
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent block1_shape_2
      image [set every repeat] = $block1_shape_path
      pos = (0, 0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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  Routine block_2_new
    RoutineSettingsComponent block_2_new
      saveStartStop = False
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        block2_shape_path = ""
        label_block_two = ""
        correct_resp_blockTwo = ""
      Begin Routine:
        random_value = random()
        distractor_position = np.random.choice([left_position, right_position], p=[0.5, 0.5])
        thisExp.addData('distrctor_position', distractor_position)
        thisExp.addData('distractor_pos_label', 'left' if distractor_position == -400 else 'right')


        if random_value <= 1/4:
            block2_shape_path = triangle
            label_block_two = "You"
            correct_resp_blockTwo = "m"
            thisExp.addData("pair", "match")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "You")
        elif 1/4 < random_value <= 2/4:
            block2_shape_path = triangle
            label_block_two = "Stranger"
            correct_resp_blockTwo = "z"
            thisExp.addData("pair", "unmatch")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "Stranger")
        elif 2/4 < random_value <= 3/4:
            block2_shape_path = square
            label_block_two = "You"
            correct_resp_blockTwo = "z"
            thisExp.addData("pair", "unmatch")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "You")
        elif 3/4 < random_value <= 4/4:
            block2_shape_path = square
            label_block_two = "Stranger"
            correct_resp_blockTwo = "m"
            thisExp.addData("pair", "match")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "Stranger")
        else:
            print("block two conditions broke math...")
    PolygonComponent block1_fixation_3
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent distractor_block1_3
      image [set every repeat] = $distractor
      pos [set every repeat] = (distractor_position, distractor_y)
      saveStartStop = False
      size = (400, 300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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    TextComponent blockone_label_3
      letterHeight = letter_height
      pos = (0, below_position)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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      text [set every repeat]:
        $label_block_two
    KeyboardComponent key_resp_8
      allowedKeys = 'z','m'
      correctAns = $correct_resp_blockTwo
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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    ImageComponent block1_shape_3
      image [set every repeat] = $block2_shape_path
      pos = (0, top_position)
      saveStartStop = False
      size = (width, height)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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  Routine block2_feedback_new
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_blockTwo = "test"
      Begin Routine:
        if(key_resp_8.keys == "m"):
            if (correct_resp_blockTwo == "m"):
                feedback_blockTwo = "correct"
            else:
                feedback_blockTwo = "incorrect"
        elif (key_resp_8.keys == "z"):
            if(correct_resp_blockTwo == "z"):
                feedback_blockTwo = "correct"
            else:
                feedback_blockTwo = "incorrect"
        else:
            feedback_blockTwo = "miss"

        print(key_resp_8.keys)
        print(correct_resp_blockTwo)
        print(feedback_blockTwo)
    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $feedback_blockTwo
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  Routine break_3
    RoutineSettingsComponent break_3
      saveStartStop = False
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    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text = Take a break for 2 minutes and come back to the expeirment.
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    KeyboardComponent key_resp_9
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 120.0
      store = nothing
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 120.0
      text = Press "S" when you are ready to resume.
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text [set every frame] = $str(120-int(t))
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  Routine block_3
    RoutineSettingsComponent block_3
      saveStartStop = False
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    TextComponent text_12
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text = Take a break for 2 minutes and come back to the expeirment.
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    KeyboardComponent key_resp_10
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 120.0
      store = nothing
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 120.0
      text = Press "S" when you are ready to resume.
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text [set every frame] = $str(120-int(t))
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  Routine block3_feedback
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_blockTwo = "test"
      Begin Routine:
        if(key_resp_11.keys == "m"):
            if (correct_resp_blockTwo == "m"):
                feedback_blockTwo = "correct"
            else:
                feedback_blockTwo = "incorrect"
        elif (key_resp_11.keys == "z"):
            if(correct_resp_blockTwo == "z"):
                feedback_blockTwo = "correct"
            else:
                feedback_blockTwo = "incorrect"
        else:
            feedback_blockTwo = "miss"
    TextComponent text_15
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $feedback_blockTwo
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  Routine block_3_new
    RoutineSettingsComponent block_3_new
      saveStartStop = False
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        block2_shape_path = ""
        label_block_two = ""
        correct_resp_blockTwo = ""
      Begin Routine:
        random_value = random()
        distractor_position = np.random.choice([left_position, right_position], p=[0.5, 0.5])
        thisExp.addData('distractor_position', distractor_position)
        thisExp.addData('distractor_pos_label', 'left' if distractor_position == -400 else 'right')

        if random_value <= 1/4:
            block2_shape_path = triangle
            label_block_two = "You"
            correct_resp_blockTwo = "m"
            thisExp.addData("pair", "match")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "You")
        elif 1/4 < random_value <= 2/4:
            block2_shape_path = triangle
            label_block_two = "Stranger"
            correct_resp_blockTwo = "z"
            thisExp.addData("pair", "unmatch")
            thisExp.addData("shape" , "triangle")
            thisExp.addData("Label", "Stranger")
        elif 2/4 < random_value <= 3/4:
            block2_shape_path = square
            label_block_two = "You"
            correct_resp_blockTwo = "z"
            thisExp.addData("pair", "unmatch")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "You")
        elif 3/4 < random_value <= 4/4:
            block2_shape_path = square
            label_block_two = "Stranger"
            correct_resp_blockTwo = "m"
            thisExp.addData("pair", "match")
            thisExp.addData("shape" , "square")
            thisExp.addData("Label", "Stranger")
        else:
            print("block two conditions broke math...")
    PolygonComponent block1_fixation_4
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent distractor_block1_4
      image [set every repeat] = $distractor
      pos [set every repeat] = (distractor_position, distractor_y)
      saveStartStop = False
      size = (400, 300)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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    TextComponent blockone_label_4
      letterHeight = letter_height
      pos = (0, below_position)
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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      text [set every repeat]:
        $label_block_two
    KeyboardComponent key_resp_11
      allowedKeys = 'z','m'
      correctAns = $correct_resp_blockTwo
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      storeCorrect = True
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    ImageComponent block1_shape_4
      image [set every repeat] = $block2_shape_path
      pos = (0, top_position)
      saveStartStop = False
      size = (width, height)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      units = pix
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Flow
  Routine Instructions
  Routine self_other_instruction
  Routine self_other_info
  Routine self_other_starting
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    conditions:
      [{'vertices': 3, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'},
      {'vertices': 3, 'label_text': 'self'},
      {'vertices': 3, 'label_text': 'other'},
      {'vertices': 4, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'},
      {'vertices': 3, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'},
      {'vertices': 3, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine free_view_instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $choice(180, size = 10, replace = False)
    conditionsFile = image_paths.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('free_view_image', 'images/1022.jpg')]),
      OrderedDict([('free_view_image', 'images/1026.jpg')]),
      OrderedDict([('free_view_image', 'images/1080.jpg')]),
      OrderedDict([('free_view_image', 'images/1101.jpg')]),
      OrderedDict([('free_view_image', 'images/1114.jpg')]),
      OrderedDict([('free_view_image', 'images/1271.jpg')]),
      OrderedDict([('free_view_image', 'images/1302.jpg')]),
      OrderedDict([('free_view_image', 'images/1303.jpg')]),
      OrderedDict([('free_view_image', 'images/1310.jpg')]),
      OrderedDict([('free_view_image', 'images/1321.jpg')]),
      OrderedDict([('free_view_image', 'images/1333.jpg')]),
      OrderedDict([('free_view_image', 'images/1450.jpg')]),
      OrderedDict([('free_view_image', 'images/1670.jpg')]),
      OrderedDict([('free_view_image', 'images/1726.jpg')]),
      OrderedDict([('free_view_image', 'images/1812.jpg')]),
      OrderedDict([('free_view_image', 'images/1820.jpg')]),
      OrderedDict([('free_view_image', 'images/1931.jpg')]),
      OrderedDict([('free_view_image', 'images/2045.jpg')]),
      OrderedDict([('free_view_image', 'images/2057.jpg')]),
      OrderedDict([('free_view_image', 'images/2058.jpg')]),
      OrderedDict([('free_view_image', 'images/2070.jpg')]),
      OrderedDict([('free_view_image', 'images/2071.jpg')]),
      OrderedDict([('free_view_image', 'images/2102.jpg')]),
      OrderedDict([('free_view_image', 'images/2104.jpg')]),
      OrderedDict([('free_view_image', 'images/2120.jpg')]),
      OrderedDict([('free_view_image', 'images/2153.jpg')]),
      OrderedDict([('free_view_image', 'images/2190.jpg')]),
      OrderedDict([('free_view_image', 'images/2200.jpg')])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
    Routine free_viewing
  LoopTerminator trials_2
  Routine task_start
  Routine countdown
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = distractor.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'distractor': 'DistAOne/1333.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2512.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/9210.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7057.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7019.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7016.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/1670.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7705.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2495.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/1812.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7025.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7041.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2513.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7004.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2215.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7010.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/5875.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2506.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2270.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2518.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7100.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2153.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2312.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2396.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/7365.jpg', 'Arousal': 'Neutral'},
      {'distractor': 'DistAOne/2205.jpg', 'Arousal': 'Neutral'}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
    Routine block_1
    Routine block1_feedback
  LoopTerminator trials_3
  Routine break_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = distractor.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine block_2_new
    Routine block2_feedback_new
  LoopTerminator trials_4
  Routine break_3
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = distractor.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine block_3_new
    Routine block3_feedback
  LoopTerminator trials_5
  Routine thank_you
