PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1440, 900]
  expName = preliminary_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        label_text = ""
        orientation = 0
        correct = 0
      Begin Routine:
        value = random()

        if value < 1/4:
            label_text = "self"
            orientation = 0
            c_resp = 'y'
        elif 1/4 < value < 2/4:
            label_text = "self"
            orientation = 45
            c_resp = 'n'
        elif 2/4 < value < 3/4:
            label_text = "other"
            orientation = 0
            c_resp = 'n'
        elif 3/4 < value < 4/4:
            label_text = "other"
            orientation = 45
            c_resp = 'y'
        else:
            print("we just broke math")
    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent label
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_text
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n'
      correctAns = $c_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = white
      ori [set every repeat] = orientation
      pos = (0, 0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
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  Routine Instructions
    RoutineSettingsComponent Instructions
      saveStartStop = False
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome to the experiment.

        press 'spacebar' to continue.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine self_other_instruction
    RoutineSettingsComponent self_other_instruction
      saveStartStop = False
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In the next slide, you will be shown two shapes. Each shape will have a label.

        In the coming task you would have to press 'y' if the image - shape combination is right and 'n' if the image does not match the label.

        press 'spacebar' to continue
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine self_other_info
    RoutineSettingsComponent self_other_info
      saveStartStop = False
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    PolygonComponent self_shape
      fillColor = white
      nVertices = 3
      pos = (-0.2, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent other
      fillColor = white
      ori = 45
      pos = (0.2, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent label_self
      letterHeight = 0.05
      pos = (-0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
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    TextComponent label_other
      letterHeight = 0.05
      pos = (0.2, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = other
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    TextComponent text
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = press 'spacebar' to contiue
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine self_other_starting
    RoutineSettingsComponent self_other_starting
      saveStartStop = False
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    TextComponent text_norm_3
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        When you shape and label match, press 'y', and when they dont match press 'n'

        press 'spacebar' to continue
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_text = ""
      Begin Routine:
        if key_resp_2.corr == 1:
            feedback_text = "correct response"
        else:
            feedback_text = "wrong response"
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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  Routine free_viewing
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    ImageComponent image
      image [set every repeat] = $free_view_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block1_start
    RoutineSettingsComponent block1_start
      saveStartStop = False
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    TextComponent text_norm_4
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        The experiment is about to start. If the shape and the label match, press 'y', if no, press 'n'. try to answer as fast as you can with accuracy.

        press 'spacebar' to continue
    KeyboardComponent key_instruct_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine block_1
    RoutineSettingsComponent block_1
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        orientation_block_one = ""
        label_block_one = ""
        correct_resp_blockOne = ""
      Begin Routine:
        random_value = random()
        thisExp.addData("distractor_location", "center")

        if random_value < 1/4:
            orientation_block_one = 0
            label_block_one = "Self"
            correct_resp_blockOne = "y"
            thisExp.addData("Orientation" , 0)
            thisExp.addData("Label", "Self")
        elif 1/2 < random_value < 2/4:
            orientation_block_one = 0
            label_block_one = "Other"
            correct_resp_blockOne = "n"
            thisExp.addData("Orientation" , 0)
            thisExp.addData("Label", "Other")
        elif 2/4 < random_value < 3/4:
            orientation_block_one = 45
            label_block_one = "Self"
            correct_resp_blockOne = "n"
            thisExp.addData("Orientation" , 45)
            thisExp.addData("Label", "Self")
        else:
            orientation_block_one = 45
            label_block_one = "Other"
            correct_resp_blockOne = "y"
            thisExp.addData("Orientation" , 45)
            thisExp.addData("Label", "Other")
            thisExp.addData("random_value", random_value)
    PolygonComponent block1_fixation
      fillColor = white
      ori = 45
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent block1_ploygon
      fillColor = white
      ori [set every repeat] = orientation_block_one
      pos = (0, 0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_block1
      image [set every repeat] = $distractors_blockOne
      pos = (0, -0.08)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    TextComponent blockone_label
      letterHeight = 0.05
      pos = (0, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $label_block_one
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      correctAns = $correct_resp_blockOne
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine block_2
    RoutineSettingsComponent block_2
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        orientation_block_two = ""
        label_block_two = ""
        correct_resp_blockTwo = ""
        x_position = 0.0
      Begin Routine:
        random_value = random()
        random_value1 = random()
        thisExp.addData("distractor_location", "periphery")

        if random_value1 < 1/2:
            x_position = 0.4
        elif 1/2 < random_value1 < 2/2:
            x_position = -0.4
        else:
            x_position = 0.0

        if random_value < 1/4:
            orientation_block_two = 0
            label_block_two = "Self"
            correct_resp_blockTwo = "y"
            thisExp.addData("Orientation" , 0)
            thisExp.addData("Label", "Self")
        elif 1/2 < random_value < 2/4:
            orientation_block_two = 0
            label_block_two = "Other"
            correct_resp_blockTwo = "n"
            thisExp.addData("Orientation" , 0)
            thisExp.addData("Label", "Other")
        elif 2/4 < random_value < 3/4:
            orientation_block_two = 45
            label_block_two = "Self"
            correct_resp_blockTwo = "n"
            thisExp.addData("Orientation" , 45)
            thisExp.addData("Label", "Self")
        else:
            orientation_block_two = 45
            label_block_two = "Other"
            correct_resp_blockTwo = "y"
            thisExp.addData("Orientation" , 45)
            thisExp.addData("Label", "Other")
            thisExp.addData("random_value", random_value)
    PolygonComponent block2_fixation
      fillColor = white
      ori = 45
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent block2_polygon
      fillColor = white
      ori [set every repeat] = orientation_block_two
      pos = (0, 0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
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    ImageComponent distractor_block2
      image [set every repeat] = $distractor_blockTwo
      pos [set every repeat] = (x_position, -0.08)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    TextComponent blocktwo_label
      letterHeight = 0.05
      pos = (0, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $label_block_two
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n'
      correctAns = $correct_resp_blockTwo
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine block2_start
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    TextComponent text_norm_5
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Block two is about to start

        Press the spacebar to continue
    KeyboardComponent key_instruct_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_5
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine free_view_instruction
    RoutineSettingsComponent free_view_instruction
      saveStartStop = False
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    TextComponent text_norm_6
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Now you will see a series of images. press any key to move to the next one.

        Press the spacebar to continue
    KeyboardComponent key_instruct_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_6
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine thank_you
    RoutineSettingsComponent thank_you
      saveStartStop = False
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    TextComponent text_norm_7
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating :))
      units = norm
      wrapWidth = 1.8
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Flow
  Routine Instructions
  Routine self_other_instruction
  Routine self_other_info
  Routine self_other_starting
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 10
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    conditions:
      [{'vertices': 3, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'},
      {'vertices': 3, 'label_text': 'self'},
      {'vertices': 3, 'label_text': 'other'},
      {'vertices': 4, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'},
      {'vertices': 3, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'},
      {'vertices': 3, 'label_text': 'self'},
      {'vertices': 4, 'label_text': 'other'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine free_view_instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = image_paths.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('free_view_image', 'images/1022.jpg')]),
      OrderedDict([('free_view_image', 'images/1026.jpg')]),
      OrderedDict([('free_view_image', 'images/1080.jpg')]),
      OrderedDict([('free_view_image', 'images/1101.jpg')]),
      OrderedDict([('free_view_image', 'images/1114.jpg')]),
      OrderedDict([('free_view_image', 'images/1271.jpg')]),
      OrderedDict([('free_view_image', 'images/1302.jpg')]),
      OrderedDict([('free_view_image', 'images/1303.jpg')]),
      OrderedDict([('free_view_image', 'images/1310.jpg')]),
      OrderedDict([('free_view_image', 'images/1321.jpg')]),
      OrderedDict([('free_view_image', 'images/1333.jpg')]),
      OrderedDict([('free_view_image', 'images/1450.jpg')]),
      OrderedDict([('free_view_image', 'images/1670.jpg')]),
      OrderedDict([('free_view_image', 'images/1726.jpg')]),
      OrderedDict([('free_view_image', 'images/1812.jpg')]),
      OrderedDict([('free_view_image', 'images/1820.jpg')]),
      OrderedDict([('free_view_image', 'images/1931.jpg')]),
      OrderedDict([('free_view_image', 'images/2045.jpg')]),
      OrderedDict([('free_view_image', 'images/2057.jpg')]),
      OrderedDict([('free_view_image', 'images/2058.jpg')]),
      OrderedDict([('free_view_image', 'images/2070.jpg')]),
      OrderedDict([('free_view_image', 'images/2071.jpg')]),
      OrderedDict([('free_view_image', 'images/2102.jpg')]),
      OrderedDict([('free_view_image', 'images/2104.jpg')]),
      OrderedDict([('free_view_image', 'images/2120.jpg')]),
      OrderedDict([('free_view_image', 'images/2153.jpg')]),
      OrderedDict([('free_view_image', 'images/2190.jpg')]),
      OrderedDict([('free_view_image', 'images/2200.jpg')])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
    Routine free_viewing
  LoopTerminator trials_2
  Routine block1_start
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = block1_distractors.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'distractors_blockOne': 'DistAOne/1333.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2512.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/9210.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7057.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7019.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7016.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/1670.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7705.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2495.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/1812.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7025.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7041.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2513.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7004.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2215.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7010.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/5875.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2506.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2270.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2518.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/7100.jpg', 'Arousal': 'Neutral'},
      {'distractors_blockOne': 'DistAOne/2153.jpg', 'Arousal': 'Neutral'}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
    Routine block_1
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = block2_distractors.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'distractor_blockTwo': 'DistATwo/1022.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/8065.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/8341.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/7499.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/2057.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4302.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4008.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4598.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4692.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/2045.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/3017.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/2071.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/8206.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/9332.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4300.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4683.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4669.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/2375.1.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4232.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/4800.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/2120.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/1271.jpg', 'Arousal': 'High'},
      {'distractor_blockTwo': 'DistATwo/3360.jpg', 'Arousal': 'High'}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
    Routine block_2
  LoopTerminator trials_4
  Routine thank_you
